PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [2560,1600]
  expName = 6_9_2024_Invalid_Condition_Right
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Final_Psychophysics_Experiment
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    PolygonComponent Fixation_Point
      fillColor = black
      lineColor = black
      shape = circle
      size = (5, 5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.4
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    PolygonComponent Cue
      fillColor = black
      lineColor = black
      pos [set every repeat] = $PositionCue
      shape = circle
      size = (5, 5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.04
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    KeyboardComponent key_resp
      allowedKeys = 'u','s'
      correctAns = 'u'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 5
      startVal [time (s)] = 1.4
      wrapWidth = 200
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      text:
        Were the lines going up and down or side to side?

        Press the 'u' button for up and down

        Press the 's' button for side to side
    ImageComponent New_Stimulus
      image [set every repeat] = $ImageFile
      interpolate = nearest
      opacity [set every repeat] = Opacity
      pos [set every repeat] = $Position
      size = (25, 25)
      startVal [time (s)] = 1.1
      stopVal [time (s)] = 1.2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = New Gabor Patches.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'ImageFile': 'New Gabor Patches/Gabor_0.png', 'Position': (-100, 100), 'PositionCue': (65, 40), 'Opacity': 1},
      {'ImageFile': 'New Gabor Patches/Gabor_90.png', 'Position': (100, 100), 'PositionCue': (-65, 40), 'Opacity': 0.5},
      {'ImageFile': None, 'Position': None, 'PositionCue': None, 'Opacity': 0.75},
      {'ImageFile': None, 'Position': None, 'PositionCue': None, 'Opacity': 0.25}]
    Routine Final_Psychophysics_Experiment
  LoopTerminator trials
