PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Test_Random_Order
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Test_Valid_Left
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    PolygonComponent Fixation_Point
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
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    PolygonComponent Cue
      fillColor = black
      lineColor = black
      pos = (0.65,0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.04
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    GratingComponent Stimulus
      contrast = -.5
      pos = (.2, .2)
      sf = 10
      size = (0.1, 0.1)
      startVal [time (s)] = 1.1
      stopVal [time (s)] = 1.2
      tex = sin
      texture resolution = 256
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    KeyboardComponent key_resp
      allowedKeys = 'u','s'
      correctAns = 'u'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.4
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      text:
        Were the lines going up and down or side to side?

        Press the 'u' button for up and down

        Press the 's' button for side to side
Flow
  Routine Test_Valid_Left
